PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = experiment
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine load_variables
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import serial
        import time
        import tdt

        #syn.getParameterValue("Button1", "ButtonPress")
        #syn.setParameterValue("IntVal", "StimCode", 1)

        syn = tdt.SynapseAPI()

        EXPERIMENT = "Experiment6"

        syn.setCurrentExperiment(EXPERIMENT)

        syn.setModeStr('Preview')

        ser = serial.Serial('COM1', baudrate=9600, timeout=1)

        if ser.is_open:
            print("Serial port is open.")
        else:
            ser.open()
            print("Serial port was closed, now opened.")

        # psychopy components constants
        response_image_dimensions = [1.55, 0.65] # units -> exp setting
        ldr_polygon_dimension = [150, 200] # pixels
        ldr_polygon_location = [960, -540] # pixels
      End Experiment:
        syn.setModeStr('Idle')
  Routine Instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome to the experiment.

        In this experiment, there sounds will be coming in from four possible locations. You have to identify, to the best of your ability, where the sounds are coming from.

        The four buttons in front of you comprise of the four possible locations the sound might come from.


        Press any buttons to see the four possible locations.
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
      Each Frame:
        if ser.cd:
            continueRoutine = False
        else:
            continueRoutine = True
  Routine image_instruction
    RoutineSettingsComponent image_instruction
      disabled = True
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    ImageComponent location_image
      image = response.png
      size = response_image_dimensions
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine countdown
    RoutineSettingsComponent countdown
      disabled = True
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $str(3-int(t))
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  Routine task
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    PolygonComponent polygon
      fillColor = white
      pos = (960, -540)
      shape = rectangle
      size = ldr_polygon_dimension
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = pix
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    SoundComponent stimuli
      sound [set every repeat] = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine load_variables
  Routine Instructions
  Routine image_instruction
  Routine countdown
  Routine task
